"""
aeif_cond_exp - Conductance based exponential integrate-and-fire neuron model
#############################################################################

Description
+++++++++++

aeif_cond_exp is the adaptive exponential integrate and fire neuron
according to Brette and Gerstner (2005), with post-synaptic
conductances in the form of truncated exponentials.

This implementation uses the embedded 4th order Runge-Kutta-Fehlberg
solver with adaptive stepsize to integrate the differential equation.

The membrane potential is given by the following differential equation:

.. math::

 C dV/dt= -g_L(V-E_L)+g_L*\Delta_T*\exp((V-V_T)/\Delta_T)-g_e(t)(V-E_e) \\
                                                     -g_i(t)(V-E_i)-w +I_e

and

.. math::

 \tau_w * dw/dt= a(V-E_L) -W

Note that the spike detection threshold V_peak is automatically set to
:math:`V_th+10 mV` to avoid numerical instabilites that may result from
setting V_peak too high.

Parameters:
+++++++++++++
The following parameters can be set in the status dictionary.

======== ======= =======================================
**Dynamic state variables:**
--------------------------------------------------------
 V_m     mV      Membrane potential
 g_ex    nS      Excitatory synaptic conductance
 g_in    nS      Inhibitory synaptic conductance
 w       pA      Spike-adaptation current
======== ======= =======================================

======== ======= =======================================
**Membrane Parameters**
--------------------------------------------------------
 C_m     pF      Capacity of the membrane
 t_ref   ms      Duration of refractory period
 V_reset mV      Reset value for V_m after a spike
 E_L     mV      Leak reversal potential
 g_L     nS      Leak conductance
 I_e     pA      Constant external input current
======== ======= =======================================

======== ======= ==================================
**Spike adaptation parameters**
---------------------------------------------------
 a       nS      Subthreshold adaptation
 b       pA      Spike-triggered adaptation
 Delta_T mV      Slope factor
 tau_w   ms      Adaptation time constant
 V_th    mV      Spike initiation threshold
 V_peak  mV      Spike detection threshold
======== ======= ==================================

=========== ======= ===========================================================
**Synaptic parameters**
-------------------------------------------------------------------------------
 E_ex       mV      Excitatory reversal potential
 tau_syn_ex ms      Rise time of excitatory synaptic conductance (alpha
                    function)
 E_in       mV      Inhibitory reversal potential
 tau_syn_in ms      Rise time of the inhibitory synaptic conductance
                    (alpha function)
=========== ======= ===========================================================

============= ======= =========================================================
**Integration parameters**
-------------------------------------------------------------------------------
gsl_error_tol real    This parameter controls the admissible error of the
                      GSL integrator. Reduce it if NEST complains about
                      numerical instabilities.
============= ======= =========================================================

Sends
+++++

SpikeEvent

Receives
++++++++

SpikeEvent, CurrentEvent, DataLoggingRequest

References
++++++++++

.. [1] Brette R and Gerstner W (2005). Adaptive Exponential
       Integrate-and-Fire Model as an Effective Description of Neuronal
       Activity. J Neurophysiol 94:3637-3642.
       DOI: https://doi.org/10.1152/jn.00686.2005


See also
++++++++

iaf_cond_exp, aeif_cond_alpha
"""
neuron aeif_cond_exp:

  initial_values:
    V_m mV = E_L  # Membrane potential
    w pA = 0 pA    # Spike-adaptation current
  end

  equations:
    function V_bounded mV = min(V_m, V_peak) # prevent exponential divergence
    shape g_in = exp(-1/tau_syn_in*t)
    shape g_ex = exp(-1/tau_syn_ex*t)

    # Add aliases to simplify the equation definition of V_m
    function exp_arg real = (V_bounded-V_th)/Delta_T
    function I_spike pA = g_L*Delta_T*exp(exp_arg)
    function I_syn_exc pA = convolve(g_ex, spikeExc) * ( V_bounded - E_ex )
    function I_syn_inh pA = convolve(g_in, spikeInh) * ( V_bounded - E_in )

    V_m' = ( -g_L*( V_bounded - E_L ) + I_spike - I_syn_exc - I_syn_inh - w + I_e + I_stim ) / C_m
    w' = (a*(V_bounded - E_L) - w)/tau_w
  end

  parameters:
    # membrane parameters
    C_m   pF = 281.0 pF     # Membrane Capacitance
    t_ref ms = 0.0 ms       # Refractory period
    V_reset mV = -60.0 mV   # Reset Potential
    g_L nS = 30.0 nS        # Leak Conductance
    E_L mV = -70.6 mV       # Leak reversal Potential (aka resting potential)

    # spike adaptation parameters
    a nS = 4 nS             # Subthreshold adaptation.
    b pA = 80.5 pA          # Spike-trigg_exred adaptation.
    Delta_T mV = 2.0 mV     # Slope factor
    tau_w ms = 144.0 ms     # Adaptation time constant
    V_th mV = -50.4 mV      # Threshold Potential
    V_peak mV = 0 mV        # Spike detection threshold.

    # synaptic parameters
    E_ex mV = 0 mV            # Excitatory reversal Potential
    tau_syn_ex ms = 0.2 ms    # Synaptic Time Constant Excitatory Synapse
    E_in mV = -85.0 mV        # Inhibitory reversal Potential
    tau_syn_in ms = 2.0 ms    # Synaptic Time Constant for Inhibitory Synapse

    # constant external input current
    I_e pA = 0 pA
  end

  internals:
    # refractory time in steps
    RefractoryCounts integer = steps(t_ref)
    # counts number of tick during the refractory period
    r integer
  end

  input:
      spikeInh nS <- inhibitory spike
      spikeExc nS <- excitatory spike
      I_stim pA <- current
  end

  output: spike

  update:
    integrate_odes()

    if r > 0: # refractory
      r -= 1 # decrement refractory ticks count
      V_m = V_reset # clamp potential
    elif V_m >= V_peak: # threshold crossing detection
      r = RefractoryCounts + 1
      V_m = V_reset # clamp potential
      w += b
      emit_spike()
    end


  end

end
