"""
Name: iaf_chxk_2008 - Conductance based leaky integrate-and-fire neuron model
                      used in Casti et al 2008.

Description:
iaf_chxk_2008 is an implementation of a spiking neuron using IAF dynamics with
conductance-based synapses [1]. It is modeled after iaf_cond_alpha with the
addition of after hyper-polarization current instead of a membrane potential
reset. Incoming spike events induce a post-synaptic change of conductance
modeled by an alpha function. The alpha function is normalized such that an
event of weight 1.0 results in a peak current of 1 nS at t = tau_syn.

References:
[1] Casti A, Hayot F, Xiao Y, and Kaplan E (2008) A simple model of retina-LGN
transmission. J Comput Neurosci 24:235-252.

Sends: SpikeEvent

Receives: SpikeEvent, CurrentEvent

Author: Heiberg

SeeAlso: iaf_cond_alpha
"""
neuron iaf_chxk_2008:

  initial_values:
    V_m mV = E_L   # membrane potential
    g_ahp nS = 0 nS      # AHP conductance
    g_ahp' nS/ms = 0 nS/ms   # AHP conductance
  end

  equations:
    shape g_in = (e/tau_syn_in) * t * exp(-t/tau_syn_in)
    shape g_ex = (e/tau_syn_ex) * t * exp(-t/tau_syn_ex)
    g_ahp'' = -2 * g_ahp' / tau_ahp - g_ahp / tau_ahp**2

    inline I_syn_exc pA = convolve(g_ex, spikesExc) * ( V_m - E_ex )
    inline I_syn_inh pA = convolve(g_in, spikesInh) * ( V_m - E_in )
    inline I_ahp pA = g_ahp * ( V_m - E_ahp )
    inline I_leak pA = g_L * ( V_m - E_L )

    V_m' = ( -I_leak - I_syn_exc - I_syn_inh - I_ahp + currents + I_e ) / C_m
  end

  parameters:
    V_th mV = -45.0 mV        # Threshold Potential
    E_ex mV = 20 mV           # Excitatory reversal potential
    E_in mV = -90 mV          # Inhibitory reversal potential
    g_L nS = 100 nS           # Leak Conductance
    C_m pF = 1000.0 pF        # Membrane Capacitance
    E_L mV = -60.0 mV         # Leak reversal Potential (aka resting potential)
    tau_syn_ex ms = 1 ms      # Synaptic Time Constant Excitatory Synapse
    tau_syn_in ms = 1 ms      # Synaptic Time Constant for Inhibitory Synapse
    tau_ahp ms = 0.5 ms       # Afterhyperpolarization (AHP) time constant
    G_ahp nS = 443.8 nS       # AHP conductance
    E_ahp mV = -95 mV         # AHP potential
    ahp_bug boolean = false  # If true, discard AHP conductance value from previous spikes
    I_e pA = 0 pA            # Constant Current
  end

  internals:
    # Impulse to add to DG_EXC on spike arrival to evoke unit-amplitude
    # conductance excursion.
    PSConInit_E nS/ms = nS * e / tau_syn_ex

    # Impulse to add to DG_INH on spike arrival to evoke unit-amplitude
    # conductance excursion.
    PSConInit_I nS/ms = nS * e / tau_syn_in

    PSConInit_AHP real = G_ahp * e / tau_ahp * (ms/nS)
  end

  input:
      spikesInh nS <- inhibitory spike
      spikesExc nS <- excitatory spike
      currents <- current
  end

  output: spike

  update:
    vm_prev mV = V_m
    integrate_odes()
    if vm_prev < V_th and V_m >= V_th:
      # neuron is not absolute refractory

      # Find precise spike time using linear interpolation
      sigma real = ( V_m - V_th ) * resolution() / ( V_m - vm_prev ) / ms

      alpha real = exp( -sigma / tau_ahp )

      delta_g_ahp real = PSConInit_AHP * sigma * alpha
      delta_dg_ahp real = PSConInit_AHP * alpha

      if ahp_bug == true:
        # Bug in original code ignores AHP conductance from previous spikes
        g_ahp  = delta_g_ahp * nS
        g_ahp' = delta_dg_ahp * nS/ms
      else:
        g_ahp  += delta_g_ahp * nS
        g_ahp' += delta_dg_ahp * nS/ms
      end

      emit_spike()
    end

  end

end


"""
Name: iaf_chxk_2008 - Conductance based leaky integrate-and-fire neuron model
                      used in Casti et al 2008.

Description:
iaf_chxk_2008 is an implementation of a spiking neuron using IAF dynamics with
conductance-based synapses [1]. It is modeled after iaf_cond_alpha with the
addition of after hyper-polarization current instead of a membrane potential
reset. Incoming spike events induce a post-synaptic change of conductance
modeled by an alpha function. The alpha function is normalized such that an
event of weight 1.0 results in a peak current of 1 nS at t = tau_syn.

References:
[1] Casti A, Hayot F, Xiao Y, and Kaplan E (2008) A simple model of retina-LGN
transmission. J Comput Neurosci 24:235-252.

Sends: SpikeEvent

Receives: SpikeEvent, CurrentEvent

Author: Heiberg

SeeAlso: iaf_cond_alpha
"""
neuron iaf_chxk_2008_implicit:

  initial_values:
    V_m mV       = E_L   # membrane potential
    g_in nS      = 0 nS      # inputs from the inh conductance
    g_in' nS/ms  = 1 nS/ms   # inputs from the inh conductance
    g_ex nS      = 0 nS      # inputs from the exc conductance
    g_ex' nS/ms  = 1 nS/ms   # inputs from the exc conductance
    g_ahp nS     = 0 nS      # AHP conductance
    g_ahp$ nS/ms = 0 nS/ms   # AHP conductance
  end

  equations:
    # alpha function for excitatory and inhibitory synaptic conductance
    shape g_in'' = -2 * g_in' / tau_syn_in - g_in / tau_syn_in**2
    shape g_ex'' = -2 * g_ex' / tau_syn_ex - g_ex / tau_syn_ex**2

    g_ahp' = g_ahp$ - g_ahp / tau_ahp
    g_ahp$' = -g_ahp$ / tau_ahp

    inline I_syn_inh pA = PSConInit_I * convolve(g_in, spikesInh) * (V_m - E_in)
    inline I_syn_exc pA = PSConInit_E * convolve(g_ex, spikesExc) * (V_m - E_ex)
    inline I_ahp pA = g_ahp * ( V_m - E_ahp )
    inline I_leak pA = g_L * ( V_m - E_L )

    V_m' = ( -I_leak - I_syn_exc - I_syn_inh - I_ahp + currents + I_e ) / C_m
  end

  parameters:
    V_th mV = -45.0 mV        # Threshold Potential
    E_ex mV = 20 mV           # Excitatory reversal potential
    E_in mV = -90 mV          # Inhibitory reversal potential
    g_L nS = 100 nS           # Leak Conductance
    C_m pF = 1000.0 pF        # Membrane Capacitance
    E_L mV = -60.0 mV         # Leak reversal Potential (aka resting potential)
    tau_syn_ex ms = 1 ms      # Synaptic Time Constant Excitatory Synapse
    tau_syn_in ms = 1 ms      # Synaptic Time Constant for Inhibitory Synapse
    tau_ahp ms = 0.5 ms       # Afterhyperpolarization (AHP) time constant
    G_ahp nS = 443.8 nS       # AHP conductance
    E_ahp mV = -95 mV         # AHP potential
    ahp_bug boolean = false  # If true, discard AHP conductance value from previous spikes
    I_e pA = 0 pA            # Constant Current
  end

  internals:
    # Impulse to add to DG_EXC on spike arrival to evoke unit-amplitude
    # conductance excursion.
    PSConInit_E 1/ms = e / tau_syn_ex

    # Impulse to add to DG_INH on spike arrival to evoke unit-amplitude
    # conductance excursion.
    PSConInit_I 1/ms = e / tau_syn_in

    PSConInit_AHP real = G_ahp * e / tau_ahp * (ms/nS)
  end

  input:
      spikesInh nS <- inhibitory spike
      spikesExc nS <- excitatory spike
      currents <- current
  end

  output: spike

  update:

    vm_prev mV = V_m
    integrate_odes()
    if vm_prev < V_th and V_m >= V_th:
      # neuron is not absolute refractory

      # Find precise spike time using linear interpolation
      sigma real = ( V_m - V_th ) * resolution() / ( V_m - vm_prev ) / ms

      alpha real = exp( -sigma / tau_ahp )

      delta_g_ahp real = PSConInit_AHP * sigma * alpha
      delta_dg_ahp real = PSConInit_AHP * alpha

      if ahp_bug == true:
        # Bug in original code ignores AHP conductance from previous spikes
        g_ahp = delta_g_ahp * nS
        g_ahp$ = delta_dg_ahp * nS/ms
      else:
        g_ahp += delta_g_ahp * nS
        g_ahp$ += delta_dg_ahp * nS/ms
      end

      emit_spike()
    end
  end

end
