"""
Name: iaf_cond_beta - Simple conductance based leaky integrate-and-fire neuron model.

Description:
iaf_cond_beta is an implementation of a spiking neuron using IAF dynamics with
conductance-based synapses. Incoming spike events induce a post-synaptic change
of conductance modelled by an beta function. The beta function
is normalised such that an event of weight 1.0 results in a peak current of 1 nS
at t = tau_syn.

References:
Meffin, H., Burkitt, A. N., & Grayden, D. B. (2004). An analytical
model for the large, fluctuating synaptic conductance state typical of
neocortical neurons in vivo				. J.  Comput. Neurosci., 16, 159-175.
Bernander, O ., Douglas, R. J., Martin, K. A. C., & Koch, C. (1991).
Synaptic background activity influences spatiotemporal integration in
single pyramidal cells.  Proc. Natl. Acad. Sci. USA, 88(24),
11569-11573.
Kuhn, Aertsen, Rotter (2004) Neuronal Integration of Synaptic Input in
the Fluctuation- Driven Regime. Jneurosci 24(10) 2345-2356
Author: Schrader, Plesser
SeeAlso: iaf_cond_exp, iaf_cond_beta_mc, iaf_cond_alpha
"""

neuron iaf_cond_beta:
  state:
    r integer             # counts number of tick during the refractory period
  end

  initial_values:
    V_m mV = E_L              # membrane potential

    # inputs from the inhibitory conductance
    g_in nS = 0 nS
    g_in$ nS/ms = g_I_const * (1 / tau_syn_rise_I - 1 / tau_syn_decay_I) * nS

    # inputs from the excitatory conductance
    g_ex nS = 0 nS
    g_ex$ nS/ms = g_E_const * (1 / tau_syn_rise_E - 1 / tau_syn_decay_E) * nS
  end

  equations:
      shape g_in' = g_in$ - g_in / tau_syn_rise_I,
            g_in$' = -g_in$ / tau_syn_decay_I

      shape g_ex' = g_ex$ - g_ex / tau_syn_rise_E,
            g_ex$' = -g_ex$ / tau_syn_decay_E

      function I_syn_exc pA = (F_E + convolve(g_ex, spikeExc)) * (V_m - E_ex)
      function I_syn_inh pA = (F_I + convolve(g_in, spikeInh)) * (V_m - E_in)
      function I_leak pA = g_L * (V_m - E_L)  # pA = nS * mV
      V_m' =  (-I_leak - I_syn_exc - I_syn_inh + currents + I_e) / C_m
  end

  parameters:
    E_L mV = -85.0 mV # Leak reversal potential (aka resting potential)
    C_m pF = 250.0 pF # Capacitance of the membrane
    t_ref ms = 2.0 ms # Refractory period
    V_th mV = -55.0 mV      # Threshold potential
    V_reset mV = -60.0 mV   # Reset potential
    E_ex mV = 0 mV          # Excitatory reversal potential
    E_in mV = -85.0 mV      # Inhibitory reversal potential
    g_L nS = 16.6667 nS     # Leak conductance
    tau_syn_rise_I ms = 0.2 ms    # Synaptic time constant excitatory synapse
    tau_syn_decay_I ms = 2.0 ms   # Synaptic time constant for inhibitory synapse
    tau_syn_rise_E ms = 0.2 ms    # Synaptic time constant excitatory synapse
    tau_syn_decay_E ms = 2.0 ms   # Synaptic time constant for inhibitory synapse
    I_e pA = 0 pA            # Constant current
    F_E nS = 0 nS            # Constant external input conductance (excitatory).
    F_I nS = 0 nS            # Constant external input conductance (inhibitory).
  end

  internals:
    # time of peak conductance excursion after spike arrival at t = 0
    t_peak_E real = tau_syn_decay_E * tau_syn_rise_E * ln(tau_syn_decay_E / tau_syn_rise_E) / (tau_syn_decay_E - tau_syn_rise_E)
    t_peak_I real = tau_syn_decay_I * tau_syn_rise_I * ln(tau_syn_decay_I / tau_syn_rise_I) / (tau_syn_decay_I - tau_syn_rise_I)
    
    # normalisation constants to ensure arriving spike yields peak conductance of 1 nS
    g_E_const real = 1 / (exp(-t_peak_E / tau_syn_decay_E) - exp(-t_peak_E / tau_syn_rise_E))
    g_I_const real = 1 / (exp(-t_peak_I / tau_syn_decay_I) - exp(-t_peak_I / tau_syn_rise_I))

    RefractoryCounts integer = steps(t_ref) # refractory time in steps
  end

  input:
    spikeInh nS  <- inhibitory spike
    spikeExc nS  <- excitatory spike
    currents <- current
  end

  output: spike

  update:
    integrate_odes()
    if r != 0: # not refractory
      r =  r - 1
      V_m = V_reset # clamp potential
    elif V_m >= V_th:
      r = RefractoryCounts
      V_m = V_reset # clamp potential
      emit_spike()
    end
  end

end
