/**
 * 
 *  iaf_psc_exp_nonlineardendrite.nestml
 *
 *  Neuron model used in ``non_linear_dendrite_test.py``. When a dendritic spike occurs, clamp the dendritic current to 
 *
 *  This file is part of NEST.
 *
 *  Copyright (C) 2004 The NEST Initiative
 *
 *  NEST is free software: you can redistribute it and/or modify
 *  it under the terms of the GNU General Public License as published by
 *  the Free Software Foundation, either version 2 of the License, or
 *  (at your option) any later version.
 *
 *  NEST is distributed in the hope that it will be useful,
 *  but WITHOUT ANY WARRANTY; without even the implied warranty of
 *  MERCHANTABILITY or FITNESS FOR A PARTICULAR PURPOSE.  See the
 *  GNU General Public License for more details.
 *
 *  You should have received a copy of the GNU General Public License
 *  along with NEST.  If not, see <http://www.gnu.org/licenses/>.
*/
neuron iaf_psc_exp_nonlineardendrite:

  initial_values:
    V_m mV = 0 mV         # membrane potential
    t_dend_sp ms = 0 ms   # dendritic spike timer
    dend_curr_enabled real = 1.   # set to 1 to allow synaptic dendritic currents to contribute to V_m integration, 0 otherwise
    I_dend_spike pA = 0 pA
  end

  equations:
    kernel I_kernel1 = exp(-t / tau_syn1)
    kernel I_kernel2 = (e / tau_syn2) * t * exp(-t / tau_syn2)
    kernel I_kernel3 = exp(-t / tau_syn3)

    recordable inline I_dend pA = convolve(I_kernel2, I_2)
 
    inline I_syn pA = convolve(I_kernel1, I_1) + dend_curr_enabled * I_dend + I_dend_spike + convolve(I_kernel3, I_3) + I_e

    V_m' = -(V_m - E_L) / tau_m + I_syn / C_m
  end

  parameters:
    C_m pF = 250 pF          # capacity of the membrane
    tau_m ms = 20 ms         # membrane time constant
    tau_syn1 ms = 10 ms      # time constant of synaptic current, port 1
    tau_syn2 ms = 10 ms      # time constant of synaptic current, port 2
    tau_syn3 ms = 10 ms      # time constant of synaptic current, port 3
    V_th mV = 25 mV          # spike threshold
    V_reset mV = 0 mV        # reset voltage
    I_e    pA = 0 pA         # external current
    E_L    mV = 0 mV         # resting potential

    # dendritic action potential     
    i_th pA = 60 pA          # current-threshold for a dendritic spike
    i_dend_sp pA = 150 pA    # current clamp value for I_dend during a dendritic spike
    T_dend_sp ms = 10 ms     # time window over which the dendritic current clamp is active
  end

  input:
    I_1 pA <- spike
    I_2 pA <- spike
    I_3 pA <- spike
  end

  output: spike

  update:
    # solve ODEs
    integrate_odes()

    if t_dend_sp > 0 ms:
      t_dend_sp -= resolution()
      if t_dend_sp <= 0 ms:
        t_dend_sp = 0 ms
        dend_curr_enabled = 1.
        I_dend = 0 pA
        I_dend' = 0 pA/ms
        I_dend_spike = 0 pA
      end
    end
    
    if I_dend > i_th:
      # current-threshold, emit a dendritic spike 
      t_dend_sp = T_dend_sp
      I_dend_spike = i_dend_sp
    end 

    # emit somatic spike
    if V_m > V_th:
      emit_spike()
      V_m = V_reset
    end
  end
end

